CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C=0")
    Name to assign these images:Cells
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=1")
    Name to assign these images:Spots
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:Cells
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cells_background_subtract
    Image or measurement?:Image
    Select the first image:Cells
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0.1
    Measurement:Intensity_MaxIntensity_Cells

Erosion:[module_num:7|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
    Select the input image:Spots
    Name the output image:Spots_eroded
    Structuring element:square,2

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Cells_background_subtract
    Name the primary objects to be identified:Cells_Primary_objects
    Typical diameter of objects, in pixel units (Min,Max):15,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Spots_eroded
    Name the primary objects to be identified:Spots_Primary_Objects
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Spots_eroded
    Select objects to measure:Spots_Primary_Objects

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Cells_Primary_objects
    Calculate the Zernike features?:No

RelateObjects:[module_num:12|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
    Parent objects:Cells_Primary_objects
    Child objects:Spots_Primary_Objects
    Name the output object:Spots_inside_cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
SplitOrMergeObjects:[module_num:13|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
    Select the input objects:Spots_Primary_Objects
    Name the new objects:SpotsInCells_merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cells_Primary_objects
    Output object type:Disconnected

TrackObjects:[module_num:14|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
    Choose a tracking method:Overlap
    Select the objects to track:Cells_Primary_objects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:No
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
OverlayObjects:[module_num:15|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
    Input:Cells
    Name the output image:SpotsInCells_merged_overlay
    Objects:SpotsInCells_merged
    Opacity:0.02

MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:Spots_eroded
    Select objects to measure:SpotsInCells_merged

OverlayObjects:[module_num:17|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
    Input:Cells
    Name the output image:Overlay_Image_Spots_Inside_Cells
    Objects:Spots_inside_cells
    Opacity:0.02

RescaleIntensity:[module_num:18|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
    Select the input image:SpotsInCells_merged_overlay
    Name the output image:Overlay_rescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0,0.08
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/RNAscope_Image_Analysis/R374/ANALYSIS/Colon_40x2x/GF/1/C1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_Cells,Image|FileName_Spots,Spots_Primary_Objects|Parent_Cells_Primary_objects,Spots_Primary_Objects|Number_Object_Number,Spots_Primary_Objects|Intensity_MassDisplacement_Spots_eroded,Spots_Primary_Objects|Intensity_MinIntensity_Spots_eroded,Spots_Primary_Objects|Intensity_IntegratedIntensityEdge_Spots_eroded,Spots_Primary_Objects|Intensity_StdIntensity_Spots_eroded,Spots_Primary_Objects|Intensity_MinIntensityEdge_Spots_eroded,Spots_Primary_Objects|Intensity_LowerQuartileIntensity_Spots_eroded,Spots_Primary_Objects|Intensity_UpperQuartileIntensity_Spots_eroded,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
DisplayDataOnImage:[module_num:20|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cells_Primary_objects
    Measurement to display:Count
    Select the image on which to display the measurements:Cells
    Text color:red
    Name the output image that has the measurements displayed:Cells_labelled_number
    Font size (points):10
    Number of decimals:0
    Image elements to save:Figure
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Overlay_rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Merged_Overlay_
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/RNAscope_Image_Analysis/R374/ANALYSIS/Colon_40x2x/GF/1/C1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cells_labelled_number
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Object_number_
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\Projects\\Alvaro Castano RNAscope\\Project 2\\Results2\\Images\\Images2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tracked
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/RNAscope_Image_Analysis/R374/ANALYSIS/Colon_40x2x/GF/1/C1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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